MATLABInstrumentDriver
FileVersion: 1.0
DriverName: D:\A\matlab\matlab\toolbox\instrument\instrument\drivers\agilent_33120a.mdd
DriverType: MATLAB interface object
InstrumentType: Function Generator
InstrumentManufacturer: red_pitaya
InstrumentModel: 1_1
InstrumentVersion: 1.0

CreateInitCode
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
ConnectInitCode
  Code:
    function init(obj)
    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
    %fopen(obj);

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

Group arbitrarywaveformch1
  Size: 1
  Mappings ChannelMap Command="ArbitrarywaveformCH11" Index="1"

  Property state
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    SetMCode:
      function set(obj, propertyName, propertyValue)
      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parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(propertyValue)
          error('state must be a string.');
      end

      fprintf(interface, ['OUTPUT1:STATE' propertyValue '']);
      propertyName = 1;
    PermissibleType: String none
    ReadOnly: never

  Method Amplitude
    MCode:
      function Amplitude(obj, gain)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(gain)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:VOLT ' gain '']);

  Method customForm
    MCode:
      function DustomForm(obj, data1)
      parent = get(obj,'parent');
      interface = get(parent,'interface');

      fprintf(interface,['SOUR1:TRAC:DATA:DATA ' data1 '' ]);

  Method DutyCycle
    MCode:
      function DutyCycle(obj,dutycycle)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(dutycycle)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:DCYC ' dutycycle '']);

  Method enable
    MCode:
      function Enable(obj,state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          error('state must be a string.');
      end

      fprintf(interface, ['OUTPUT1:STATE ' state '']);

  Method frequency
    MCode:
      function Frequency(obj, frequency)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(frequency)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:FREQ:FIX ' frequency '']);

  Method offset
    MCode:
      function offset(obj, off)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(off)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:VOLT:OFFS ' off '']);

  Method phase
    MCode:
      function phase(obj, phase)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(phase)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:PHAS ' phase '']);

  Method waveform
    MCode:
      function waveform(obj, waveform)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(waveform)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:FUNC ' waveform '']);

Group arbitrarywaveformch2
  Size: 1
  Mappings ChannelMap Command="ArbitrarywaveformCH21" Index="1"

  Method Amplitude
    MCode:
      function Amplitude(obj, gain)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(gain)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:VOLT ' gain '']);

  Method CustomForm
    MCode:
      function DustomForm(obj, data1)
      parent = get(obj,'parent');
      interface = get(parent,'interface');
      fprintf(interface,['SOUR2:TRAC:DATA:DATA ' data1 '' ]);

  Method DutyCycle
    MCode:
      function DutyCycle(obj,dutycycle)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(dutycycle)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:DCYC ' dutycycle '']);

  Method Enable
    MCode:
      function Enable(obj,state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          error('state must be a string.');
      end

      fprintf(interface, ['OUTPUT2:STATE ' state '']);

  Method Frequency
    MCode:
      function Frequency(obj, frequency)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(frequency)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:FREQ:FIX ' frequency '']);

  Method Offset
    MCode:
      function Offset(obj, off)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(off)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:VOLT:OFFS ' off '']);

  Method Phase
    MCode:
      function Phase(obj, phase)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(phase)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:PHAS ' phase '']);

  Method Waveform
    MCode:
      function Waveform(obj, waveform)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(waveform)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:FUNC ' waveform '']);

Group burstmodch1
  Size: 1
  Mappings ChannelMap Command="BurstCH11" Index="1"

  Method BurstCount
    MCode:
      function BurstCount(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:BURS:NOR ' val '']);

  Method Cycles
    MCode:
      function Cycles(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:BURS:NCYC ' val '']);

  Method Enabled
    MCode:
      function Cycles(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:BURS:STAT ' val '']);

  Method InternalPeriod
    MCode:
      function InternalPeriod(obj,val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:BURS:INT:PER ' val '']);

Group burstmodch2
  Size: 1
  Mappings ChannelMap Command="Burstmodch21" Index="1"

  Method BurstCount
    MCode:
      function BurstCount(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:BURS:NOR ' val '']);

  Method Cycles
    MCode:
      function Cycles(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:BURS:NCYC ' val '']);

  Method Enabled
    MCode:
      function Cycles(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:BURS:STAT ' val '']);

  Method InternalPeriod
    MCode:
      function IntrnalPeriod(obj,val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:BURS:INT:PER ' val '']);

Group ledcontrol
  Size: 1
  Mappings ChannelMap Command="RP1" Index="1"

  Property LED1
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED1'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED1,'propertyValue'']);
    PermissibleType: String none
    ReadOnly: never

  Property LED2
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED2'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED2,'propertyValue'']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property LED3
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED3'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED3,'propertyValue'']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property LED4
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED4'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED4,'propertyValue'']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property LED5
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED5'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED5,'propertyValue'']);
      propertyName = 1;
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property LED6
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED6'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED6,'propertyValue'']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property LED7
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED7'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED7,'propertyValue'']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Method LED1
    MCode:
      function LED1(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED1,' state '']);

  Method LED2
    MCode:
      function LED2(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED2,' state '']);

  Method LED3
    MCode:
      function LED3(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED3,' state '']);

  Method LED4
    MCode:
      function LED4(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED4,' state '']);

  Method LED5
    MCode:
      function LED5(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED5,' state '']);

  Method LED6
    MCode:
      function LED6(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED6,' state '']);

  Method LED7
    MCode:
      function LED7(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED7,' state '']);

Group system
  Size: 1
  Mappings ChannelMap Command="System1" Index="1"

  Method ResetGenerator
    MCode:
      function ResetGenerator(obj)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      fprintf(interface, ['GEN:RST ']);

Group triggerch1
  Size: 1
  Mappings ChannelMap Command="TriggerCH11" Index="1"

  Property source
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    SetMCode:
      function set(obj, propertyName, propertyValue)
      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parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(dutycycle)
          error('state must be a string.');
      end

      fprintf(interface, ['OUTPUT1:DCYC' propertyValue '']);

      propertyName = 1;
    PermissibleType: String none
    ReadOnly: never

  Method ImmediateTgigger
    MCode:
      function ImmediateTgigger(obj)
      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parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      fprintf(interface, ['OUTPUT1:TRIG:INT']);

  Method Source
    MCode:
      function Source(obj,source)

      parent = get(obj,'parent');

      interface= get(parent,'interface');

      if ~ischar(source)
          error('input must be a string');
      end

      fprintf(interface, ['SOUR1:TRIG:SOUR ' source '']);

Group triggerch2
  Size: 1
  Mappings ChannelMap Command="TriggerCH21" Index="1"

  Method ImmediateTrigger
    MCode:
      function ImmediateTgigger(obj)
      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parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      fprintf(interface, ['OUTPUT2:TRIG:INT']);

  Method Source
    MCode:
      function Source(obj,source)

      parent = get(obj,'parent');

      interface= get(parent,'interface');

      if ~ischar(source)
          error('input must be a string');
      end

      fprintf(interface, ['SOUR2:TRIG:SOUR ' source '']);
