MATLABInstrumentDriver
FileVersion: 1.0
DriverName: D:\A\matlab\matlab\toolbox\instrument\instrument\drivers\agilent_33120a.mdd
DriverType: MATLAB interface object
InstrumentType: Function Generator
InstrumentManufacturer: red_pitaya
InstrumentModel: 1_1
InstrumentVersion: 1.0

CreateInitCode
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
ConnectInitCode
  Code:
    function init(obj)
    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
    %fopen(obj);

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Amplitude
    Type: InstrumentCommand
    ConfigureCommand: VOLTage
    QueryCommand: VOLTage?
    PermissibleType: Double bounded DependentProperty=OutputLoad DependentPropertyValue=50.0 [Max="10.0" Min="0.04"]
    PermissibleType: Double bounded DependentProperty=OutputLoad DependentPropertyValue=9.9e37 [Max="20.0" Min="0.04"]
    PermissibleType: String enum [max=MAX, min=MIN]
    DefaultValue: 0.100
    ReadOnly: never
    Description: Set the output amplitude for the currently active function.

      MIN selects the smallest amplitude allowed for the selected function (50 mVpp into 50 ohms)
      MAX Selects the largest amplitude allowed (10 Vpp into 50 ohms).

      The default amplitude is 100 mVpp(into 50 ohms).

      For arbitrary waveforms, the maximum amplitude will be limited if the data do not span the full range of the output DAC (Digital-to-Analog Converter). For example, the built-in "SINC" does not use the full range of value between PLUS OR MINUS 1 and therefore its maximum amplitude is 6.084 (into 50 ohms).

      For dc volts, the output level is actually controlled by setting the offset voltage. You can set the dc voltage to any value between PLUS OR MINUS 5 Vdc into 50 ohms or PLUS OR MINUS 10 Vdc into an open circuit.

  Property AmplitudeOffset
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the interface
      g = get(obj,'Interface');

      %ask for the value
      fprintf(g,'VOLTage:OFFSet?');

      %read the value and return it
      propertyValue = eval(fscanf(g));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the interface
      g = get(obj,'Interface');

      %get the OutputLoad
      load = get(obj,'OutputLoad');

      if ~ischar(propertyValue);

      	switch load

      		case 50

      			if (propertyValue > .2) || (propertyValue < -.2)
      				error(['For the current OutputLoad setting, accepted ',...
      					'values for AmplitudeOffset are ''min'',''max'', ',...
      					'or a value from -.2 to .2']);
      			else
      				fprintf(g,['VOLTage:OFFSet ',num2str(propertyValue)]);
      			end%if/else

      		case 9.9e37

      			if (propertyValue > .4) || (propertyValue < -.4)
      				error(['For the current OutputLoad setting, accepted ',...
      					'values for AmplitudeOffset are ''min'',''max'', ',...
      					'or a value from -.4 to .4']);
      			else
      				fprintf(g,['VOLTage:OFFSet ',num2str(propertyValue)]);
      			end%if/else

      		otherwise
      			error(['Unexpected value for OutputLoad. Expected ',...
      				'50 or 9.9e37']);

      	end%switch load

      else

      	fprintf(g,['VOLTage:OFFSet ',propertyValue]);

      end%if/else
    PermissibleType: Double bounded DependentProperty=OutputLoad DependentPropertyValue=50.0 [Max="0.2" Min="-0.2"]
    PermissibleType: Double bounded DependentProperty=OutputLoad DependentPropertyValue=9.9e37 [Max="0.4" Min="-0.4"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: -0.2
    ReadOnly: never

  Property AmplitudeUnits
    Type: InstrumentCommand
    ConfigureCommand: VOLTage:UNIT
    QueryCommand: VOLTage:UNIT?
    PermissibleType: String enum [vpp=VPP, vrms=VRMS, dbm=DBM, default=DEF]
    DefaultValue: vpp
    ReadOnly: never
    Description: Select the output unit from amplitude only.

  Property Catalog
    Type: InstrumentCommand
    QueryCommand: DATA:CATAlog?
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: always
    Description: List the names of all waveforms currently downloaded to memory.

  Property Dutycycle
    Type: InstrumentCommand
    ConfigureCommand: PULSE:DCYCLe
    QueryCommand: PULSE:DCYCLe?
    PermissibleType: String enum [min=MIN, max=MAX]
    PermissibleType: Double bounded [Max="80.0" Min="20.0"]
    DefaultValue: 50
    ReadOnly: never
    Description: Set the duty cycle in percent for square waves only.

      Duty cycle represents the amount of time per cycle that the square wave is high.

      The duty cycle is remembered when you change from square wave to another function. When you return the square wave function, the previous duty cycle is used. The APPly command automatically sets the duty cycle to 50% for square waves.

      The duty cycle is automatically adjusted if you select a frequency that is not valid with the percent duty cycle. For example if you set the duty cycle to 70% and then change the frequency to 8MHz, the function generator will automatically adjust the duty cycle to 60% (the upper limit for this frequency).

  Property Frequency
    Type: InstrumentCommand
    ConfigureCommand: FREQuency
    QueryCommand: FREQuency?
    PermissibleType: Double bounded [Max="1.5E7" Min="1.0E-4"]
    PermissibleType: String enum [min=MIN, max=Max]
    DefaultValue: 1.0E-4
    ReadOnly: never
    Description: Set the output frequency.

      min selects the lowest frequency allowed for currently active function.
      max selects the highest frequency allowed for currently active function.

      The default frequency is 1 kHz for all functions.

      For arbitrary waveforms that you create and download from memory, the maximum frequency depends on the number of points specified in the waveform.

      The output frequency is automatically adjusted if you select a function whose maximum frequency is less than that of currently active function. For example, if you output 1 MHz sine wave and then change the function to triangle wave, the function generator will adjust the output to 100 kHz (the upper limit for triangle wave).

  Property OutputLoad
    Type: InstrumentCommand
    ConfigureCommand: OUTPut:LOAD
    QueryCommand: OUTPut:LOAD?
    PermissibleType: Double enum [50.0, 9.9E37]
    PermissibleType: String enum [infinity=INF, min=MIN, max=MAX]
    DefaultValue: 50
    ReadOnly: never
    Description: Select the output termination for output amplitude and offset voltage.

      The function generator has a fixed output impedance of 50 ohms on the OUTPUT terminal. You can specify whether you are terminating the output into a 50 ohms load or an open circuit. Incorrect impedance matching between the function generator and your load will result in an amplitude or offset which does not match the specified signal level.

      INF sets the output termination to "high impedance".
      MIN selects 50 ohms.
      MAX selects "high impedance".
      The default is 50 ohms.

      The amplitude (or dc offset) is automatically adjusted (and no error is generated) if you change the output termination. For example, if you set the amplitude to 10 Vpp and then change the termination from 50 ohms to "high impedance", the display impedance will double to 20 Vpp. If you change the "high impedance" to 50 ohms, the displayed amplitude will drop in half.

      If you specify 50 ohms but are actually terminating into an open circuit, the displayed output will be twice the value specified. For example, if you set the offset to 100 mVdc (and specify a 50 ohms termination) but are actually terminating output into an open circuit, the actual displayed offset will be 200 mVdc.

  Property OutputMode
    GetMCode:
      propertyValue = function get(obj, propertyName)
      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
      % Get interface.
      interface = get(obj,'Interface');

      % If it is not stantard, it is arbitrary
      shape = get(obj,'waveform');

      if strcmpi(shape,'USER')
          propertyValue ='arbitrary';
      else
          propertyValue ='standard';
      end
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    PermissibleType: String enum [arbitrary=aribtrary, standard=standard]
    DefaultValue: standard
    ReadOnly: always

  Property OutputSync
    Type: InstrumentCommand
    ConfigureCommand: OUTPut:SYNC
    QueryCommand: OUTPut:SYNC?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: off
    ReadOnly: never
    Description: Enable or disable output SYNC from the terminal.

      The default is "ON".

      When the SYNC signal is disabled, the output level on the SYNC terminal is indeterminate (it might be a TTL "high" or a TTL "low").

  Property TriggerSlope
    Type: InstrumentCommand
    ConfigureCommand: TRIGger:SLOPe
    QueryCommand: TRIGger:SLOPe?
    PermissibleType: String enum [positive=POS, negative=NEG]
    DefaultValue: positive
    ReadOnly: never
    Description: Select the polarity of the EXT Trig terminal.

  Property TriggerSource
    Type: InstrumentCommand
    ConfigureCommand: TRIGger:SOURce
    QueryCommand: TRIGger:SOURce?
    PermissibleType: String enum [immediate=IMM, external=EXT, bus=BUS]
    DefaultValue: immediate
    ReadOnly: never
    Description: Select the source from which the function generator will accept a trigger.

  Property Waveform
    Type: InstrumentCommand
    ConfigureCommand: FUNCtion:SHAPe
    QueryCommand: FUNCtion:SHAPe?
    PermissibleType: String enum [sin=SIN, square=SQU, ramp=RAMP, noise=NOIS, DC=DC, user=USER, triangle=TRI]
    DefaultValue: sin
    ReadOnly: never
    Description: Select the output function.

      The selected waveform is output using the previously selected frequency, amplitude, and dc offset settings. If you select "USER", the function generator outputs the arbitrary waveform currently selected by the FUNC:USER command.

  Method drivertest
    MCode:
      function varargout = drivertest(obj)
      %   AGILENT_33120_MIDTEST01 Code for testing a MATLAB instrument driver.
      %
      %   This is the machine generated code that tests a MATLAB instrument driver,
      %
      %   The test consists of multiple test steps that can test the MATLAB instrument
      %   drivers functions and properties.
      %
      %   The test code was generated with the MIDTEST GUI. For more information
      %   on MIDTEST, type 'instrhelp midtest' at the MATLAB command prompt.
      %
      %
      %   See also ICDEVICE, MIDTEST.
      %

      %   Creation time: 17-Feb-2004 15:45:53

      % Wrap entire test in try catch.

      try
      fprintf('Test: agilent_33120\n');
      fprintf(['Start time: ' datestr(now) '\n']);

      % Initialize variables.
      varargout              = {};
      noErrorMsg             = '+0,"No error"';
      stepWarningOccurred    = false;
      warningOccurred        = false;
      errorOccurred          = false;
      deviceObj           = obj;

      % Test Step 1: reset (Function Test Step)

      errorcode = false;
      try
          % Execute the function.
          devicereset(deviceObj);

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf(result);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.');
          fprintf(lasterr);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      % Test Step 2: AmplitudeUnits vpp (Set Property Test Step)

      errorcode = false;

      try
          % Configure the property.
          set(deviceObj, 'AmplitudeUnits', 'vpp');

          % Check if instrument error occurred.
          result = geterror(deviceObj);
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while setting the property value.\n');
              fprintf([result '\n']);
          end

          % Verify that the configured value matches the expected value.
          if (errorcode == false)
              % Get the current property value.
              currentValue = get(deviceObj, 'AmplitudeUnits');

              % Compare to the expected value.
              errorcode = ~isequal(currentValue, 'vpp');

              % Post information about test step failure.
              if (errorcode == true)
                  fprintf('The property is not configured to the expected value.');

                  % Post actual value.
                  if isnumeric(currentValue)
                      fprintf(['Actual value: ' num2str(currentValue)]);
                  else
                      fprintf(['Actual value: ' currentValue]);
                  end

                  % Post expected value.
                  fprintf('Expected value: vpp');
              end

              % Check if instrument error occurred.
              result = geterror(deviceObj);
              errorcode1 = ~strcmpi(result, noErrorMsg);

              % Post information about error if one occurred.
              if (errorcode1 == true)
                  errorcode = errorcode1;
                  fprintf('An instrument error occurred while getting the property value.');
                  fprintf(result);
              end
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf(lasterr);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      % Test Step 3: AmplitudeUnits vrms (Set Property Test Step)
      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    % Configure the property.
      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    % Check if instrument error occurred.
      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% Post information about error if one occurred.
      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    % Verify that the configured value matches the expected value.
      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        % Get the current property value.
      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        % Compare to the expected value.
      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        % Post information about test step failure.
      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            % Post actual value.
      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            % Post expected value.
      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    % A MATLAB error occurred.
      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    % Post information about error.
      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% Post message indicating if test step passed.
      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% Test Step 4: AmplitudeUnits dbm (Set Property Test Step)
      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% Test Step 5: AmplitudeUnits default (Set Property Test Step)
      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% Test Step 6: Catalog get (Get Property Test Step)
      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    % Query the property.
      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% Test Step 7: SETUP - set to square (Set Property Test Step)
      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% Test Step 8: Dutycycle min (Set Property Test Step)
      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% Test Step 9: Dutycycle max (Set Property Test Step)
      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% Test Step 10: Dutycycle 20 (Set Property Test Step)
      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% Test Step 15: Frequency min (Set Property Test Step)
      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% Test Step 16: Frequency max (Set Property Test Step)
      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% Test Step 17: Frequency 1e-4 (Set Property Test Step)
      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% Test Step 25: Frequency 90,000 (Set Property Test Step)
      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% Test Step 27: Frequency 3,000,000 (Set Property Test Step)
      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% Test Step 29: Waveform sin (Set Property Test Step)
      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% Test Step 30: Waveform square (Set Property Test Step)
      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% Test Step 34: Waveform ramp (Set Property Test Step)
      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% Test Step 35: Waveform triangle (Set Property Test Step)
      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% Test Step 36: Waveform noise (Set Property Test Step)
      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% Test Step 37: Waveform user (Set Property Test Step)
      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% Test Step 38: Waveform DC (Set Property Test Step)
      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% Test Step 41: OutputLoad min (Set Property Test Step)
      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% Test Step 42: OutputLoad max (Set Property Test Step)
      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% Test Step 43: OutputLoad inf (Set Property Test Step)
      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% Test Step 44: OutputLoad 50 (Set Property Test Step)
      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% Test Step 45: OutputMode standard (Get Property Test Step)
      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% Verify that the queried value matches the expected value.
      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% Test Step 47: OutputMode arbitrary (Get Property Test Step)
      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% Test Step 48: OutputSync on (Set Property Test Step)
      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% Test Step 49: OutputSync off (Set Property Test Step)
      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% Test Step 51: TriggerSlope pos (Set Property Test Step)
      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% Test Step 52: TriggerSlope neg (Set Property Test Step)
      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% Test Step 53: TriggerSource imm (Set Property Test Step)
      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% Test Step 54: TriggerSource ext (Set Property Test Step)
      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% Test Step 55: TriggerSource bus (Set Property Test Step)
      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% Test Step 56: reset (Function Test Step)
      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    % Execute the function.
      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% Test Step 57: Set Property (Set Property Test Step)
      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% Test Step 58: Burstmod On (Set Property Test Step)
      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% Test Step 59: Trigger (Function Test Step)
      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% Test Step 60: Burstmod off (Set Property Test Step)
      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% Test Step 61: AM on (Set Property Test Step)
      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% Test Step 62: AM off (Set Property Test Step)
      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% Test Step 64: AM Depth min (Set Property Test Step)
      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% Test Step 65: AM Depth max (Set Property Test Step)
      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% Test Step 66: AM Depth 0 (Set Property Test Step)
      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% Test Step 72: AM InternalFrequency min (Set Property Test Step)
      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% Test Step 73: AM InternalFrequency max (Set Property Test Step)
      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% Test Step 74: AM InternalFrequency .01 (Set Property Test Step)
      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% Test Step 75: AM InternalFrequency. 11 (Set Property Test Step)
      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% Test Step 81: AM InternalWaveform All (Set Property Test Step)
      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% Overall error status for all settings.
      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% Valid values for the InternalWaveform property.
      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% Test all supported values.
      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% Test Step 82: AM Source all (Set Property Test Step)
      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% Valid values for the Source property.
      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% Test Step 84: AWF on (Set Property Test Step)
      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% Test Step 85: AWF CrestFactor (Get Property Test Step)
      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% Test Step 86: AWF CurrentWaveformName (Get Property Test Step)
      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% Test Step 87: AWF MaxNumberWaveforms (Get Property Test Step)
      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% Test Step 88: AWF Offset min (Set Property Test Step)
      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% Test Step 89: AWF Offset  max (Set Property Test Step)
      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% Test Step 90: AWF Offset -.15 (Set Property Test Step)
      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% Test Step 113: AWF WaveformLengthMax (Get Property Test Step)
      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% Test Step 114: AWF WaveformLengthMin (Get Property Test Step)
      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% Test Step 115: clear (Function Test Step)
      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% This test step generated no code. Most likely because a
      % property or function to test was not selected.
      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% Test Step 116: SETUP - Waveform Sin (Set Property Test Step)
      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% Test Step 117: SETUP - freq 1000 (Set Property Test Step)
      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% Test Step 119: BM Cycles min (Set Property Test Step)
      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% Test Step 120: BM Cycles max (Set Property Test Step)
      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% Test Step 121: BM Cycles inf (Set Property Test Step)
      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% Test Step 122: BM Cycles 1 (Set Property Test Step)
      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% Test Step 127: BM InternalRate min (Set Property Test Step)
      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% Test Step 128: BM InternalRate max (Set Property Test Step)
      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% Test Step 129: BM InternalRate .01 (Set Property Test Step)
      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% Test Step 131: BM Phase min (Set Property Test Step)
      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% Test Step 132: BM Phase max (Set Property Test Step)
      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% Test Step 133: BM Phase -360 (Set Property Test Step)
      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% Test Step 138: BM Source All (Set Property Test Step)
      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% Cleanup.
      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% Post results.
      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    % An error occurred while running the test.
      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

  Method trigger
    Type: InstrumentCommand
    Line Command="*TRG" Output="false"
    Description: TRIGGER Send a software trigger to the instrument.

      INVOKE(OBJ, 'trigger') sends a software trigger to the instrument.

Group arbitrarywaveformch1
  Size: 1
  Mappings ChannelMap Command="ArbitrarywaveformCH11" Index="1"

  Property state
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    SetMCode:
      function set(obj, propertyName, propertyValue)
      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parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(propertyValue)
          error('state must be a string.');
      end

      fprintf(interface, ['OUTPUT1:STATE' propertyValue '']);
      propertyName = 1;
    PermissibleType: String none
    ReadOnly: never

  Method Amplitude
    MCode:
      function Amplitude(obj, gain)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(gain)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:VOLT ' gain '']);

  Method customForm
    MCode:
      function DustomForm(obj, data1)
      parent = get(obj,'parent');
      interface = get(parent,'interface');

      fprintf(interface,['SOUR1:TRAC:DATA:DATA ' data1 '' ]);

  Method DutyCycle
    MCode:
      function DutyCycle(obj,dutycycle)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(dutycycle)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:DCYC ' dutycycle '']);

  Method enable
    MCode:
      function Enable(obj,state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          error('state must be a string.');
      end

      fprintf(interface, ['OUTPUT1:STATE ' state '']);

  Method frequency
    MCode:
      function Frequency(obj, frequency)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(frequency)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:FREQ:FIX ' frequency '']);

  Method offset
    MCode:
      function offset(obj, off)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(off)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:VOLT:OFFS ' off '']);

  Method phase
    MCode:
      function phase(obj, phase)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(phase)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:PHAS ' phase '']);

  Method waveform
    MCode:
      function waveform(obj, waveform)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(waveform)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:FUNC ' waveform '']);

Group arbitrarywaveformch2
  Size: 1
  Mappings ChannelMap Command="ArbitrarywaveformCH21" Index="1"

  Method Amplitude
    MCode:
      function Amplitude(obj, gain)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(gain)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:VOLT ' gain '']);

  Method CustomForm
    MCode:
      function DustomForm(obj, data1)
      parent = get(obj,'parent');
      interface = get(parent,'interface');
      fprintf(interface,['SOUR2:TRAC:DATA:DATA ' data1 '' ]);

  Method DutyCycle
    MCode:
      function DutyCycle(obj,dutycycle)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(dutycycle)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:DCYC ' dutycycle '']);

  Method Enable
    MCode:
      function Enable(obj,state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          error('state must be a string.');
      end

      fprintf(interface, ['OUTPUT2:STATE ' state '']);

  Method Frequency
    MCode:
      function Frequency(obj, frequency)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(frequency)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:FREQ:FIX ' frequency '']);

  Method Offset
    MCode:
      function Offset(obj, off)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(off)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:VOLT:OFFS ' off '']);

  Method Phase
    MCode:
      function Phase(obj, phase)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(phase)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:PHAS ' phase '']);

  Method Waveform
    MCode:
      function Waveform(obj, waveform)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(waveform)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:FUNC ' waveform '']);

Group burstmod
  Size: 1
  Mappings ChannelMap Command="BurstMod1" Index="1"

  Property Cycles
    Type: InstrumentCommand
    ConfigureCommand: BM:NCYCles
    QueryCommand: BM:NCYCles?
    PermissibleType: Double bounded [Max="50000.0" Min="1.0"]
    PermissibleType: String enum [min=MIN, max=MAX, infinity=INF]
    DefaultValue: 1
    ReadOnly: never
    Description: Set the number of cycles to be output per burst( Trigger burst mode only).

      Select from one cycle to 50 000 cycles, in 1 cycles increments. The default is 1 cycle.

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: BM:STATe
    QueryCommand: BM:STATe?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Enable or disable burst modulation. 

      To ensure proper operation, you should enable the burst mode after you have set other modulation parameters. Only one modulation mode can be enabled at a time.
      When you enable the burst mode, the previous modulation mode is turned off.

  Property InternalRate
    Type: InstrumentCommand
    ConfigureCommand: BM:INTernal:Rate
    QueryCommand: BM:INTernal:Rate?
    PermissibleType: Double bounded [Max="50000.0" Min="0.01"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Set the burst rate for internally triggered bursts.

      The burst rate frequency defines the interval between bursts. Select from 10 mHz to 50 kHz. The default is 100 Hz.

      The burst rate is used only when internal triggering is enables. The burst rate is ignored when single triggering or external triggering is enabled.

      It is possible to specify a burst rate that is too fast for the function generator to output with the specified carrier frequency and burst count. If the burst rate is too high, the function generator will internally adjust it as needed to continuously re-trigger the burst. The adjustment is handled internally by the function generator.

  Property Phase
    Type: InstrumentCommand
    ConfigureCommand: BM:PHASe
    QueryCommand: BM:PHASe?
    PermissibleType: Double bounded [Max="360.0" Min="-360.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0
    ReadOnly: never
    Description: Set the starting phase for the burst (Trigger burst mode only).

      Select from -360 degrees to +360, in .001 degree increments. The default is 0 degrees.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: BM:SOURCe
    QueryCommand: BM:SOURCe?
    PermissibleType: String enum [external=EXT, internal=INT]
    DefaultValue: external
    ReadOnly: never
    Description: Select the burst modulation source.

      In the external gated burst mode, the output waveform is either "on" or "off" based on the level of the external signal applied to the rear panel.

      When the internal burst source is selected, the external gated mode is disabled.

      When the external gate source is selected, the output is enabled or disabled based on the logic level of the gate signal applied to the EXT TRIG terminal. The default is INT.

      When external gate source is selected, the burst count, burst rate, burst phase, and burst trigger are ignored (these parameters are used only for burst mode).

Group burstmodch1
  Size: 1
  Mappings ChannelMap Command="BurstCH11" Index="1"

  Method BurstCount
    MCode:
      function BurstCount(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:BURS:NOR ' val '']);

  Method Cycles
    MCode:
      function Cycles(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:BURS:NCYC ' val '']);

  Method Enabled
    MCode:
      function Cycles(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:BURS:STAT ' val '']);

  Method InternalPeriod
    MCode:
      function InternalPeriod(obj,val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR1:BURS:INT:PER ' val '']);

Group burstmodch2
  Size: 1
  Mappings ChannelMap Command="Burstmodch21" Index="1"

  Method BurstCount
    MCode:
      function BurstCount(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:BURS:NOR ' val '']);

  Method Cycles
    MCode:
      function Cycles(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:BURS:NCYC ' val '']);

  Method Enabled
    MCode:
      function Cycles(obj, val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:BURS:STAT ' val '']);

  Method InternalPeriod
    MCode:
      function IntrnalPeriod(obj,val)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(val)
          error('state must be a string.');
      end

      fprintf(interface, ['SOUR2:BURS:INT:PER ' val '']);

Group calibration
  Size: 1
  Mappings ChannelMap Command="Calibration1" Index="1"

  Property Count
    Type: InstrumentCommand
    QueryCommand: CALibration:Count?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Query the function generator to determine the number of times it has been calibrated.

  Property Enabled
    Type: InstrumentCommand
    QueryCommand: CALibration:Secure:State?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: while open
    Description: Query the secured state of the funtion generator.

  Property Message
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface
      interface = get(get(obj,'parent'),'interface');

      % Get the string
      fprintf(interface,'CALibration:STRing?')

      % Return it
      propertyValue = fscanf(interface);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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

      % Error checking.
      if ~ischar(propertyValue)
          error('MESSAGE must be a string.');
      end

      % Get interface.
      interface = get(get(obj,'parent'),'interface');

      % Write the command to instrument.
      fprintf(interface, ['CALibration:STRing "' propertyValue '"']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never
    Description: Record calibration information about the function generator.

  Property Setup
    Type: InstrumentCommand
    ConfigureCommand: CALibration:SETup
    QueryCommand: CALibration:SETup?
    PermissibleType: Double bounded [Max="84.0" Min="0.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Configure the function generator's internal state for each of the calibration steps to be performed.

  Method securedevice
    MCode:
      function securedevice(obj, calibrationCode, state)
      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% code is the code to secure the instrument

      %Get parent of object
      parent = get(obj,'parent');

      % Get interface.
      interface = get(parent,'Interface');

      % Parse inputs.
      switch (nargin)
      case 1
          error('CALIBRATIONCODE must be specified.');
      case 2
          fprintf(interface,'CALibration:SECure:STATe?');
          currentState = fscanf(interface, '%g');
      case 3
          % STATE can either be 'secure' or 'unsecure'.
          if ~any(strcmpi(state, {'secure', 'unsecure'}))
              error('STATE must be either ''secure'' or ''unsecure''.');
          end

          % Translating State into the expected current state numeric value.
          if strcmpi(state, 'secure')
              currentState = 0;
          else
              currentState = 1;
          end
      otherwise
          error('Too many input arguments.');
      end

      % Error checking.
      if ~ischar(calibrationCode)
          error('CALIBRATIONCODE must be a string.');
      end

      % Unsecure or secure the instrument.
      switch (currentState)
      case 0
          % Secure.
          fprintf(interface,['CALibration:SECure:STATe ON, ' calibrationCode]);
      case 1
          % Unsecure.
          fprintf(interface,['CALibration:SECure:STATe OFF , ' calibrationCode]);
      end
    Description: SECUREDEVICE secure or unsecure the power supply for calibration

      INVOKE(OBJ, 'securedevice','code','secure') to 'secure' the device after the calibration process.

      INVOKE(OBJ, 'securedevice','code','unsecure') to ‘unsecure’ the device before calibration.

  Method setsecurecode
    MCode:
      function setsecurecode(obj,secureCode)
      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% SecureCode is the new code.

      % Get parent
      parent = get(obj,'parent');

      % Get the interface.
      interface = get(parent,'interface');

      % Validating the code (12-character format).
      if ~(isvarname(secureCode) && length(secureCode) <= 12)
          error(['SECAURECODE must be a character string with letters, ',...
                 'digits and ' sprintf('\n') 'underscores. The first character ',...
                 'in SECURECODE must be a letter.' sprintf('\n') 'The maximum length is 12 characters.']);
      end

      % Verifying that the device is unsecured before changing the code.
      fprintf(interface,'CALibration:SECure:STATe?')
      state = fscanf(interface,'%g');

      if (state == 1)
          error(['The device must be unsecured before changing the code.' sprintf('\n'),...
              'Type ''instrhelp(obj, ''securedevice'')'' for more information on how ' sprintf('\n'),...
              'to unsecure the device.']);
          return
      end

      % Set the secure code to the new code.
      fprintf(interface,['CALibration:SECure:CODE ' secureCode])
    Description: SETSECURECDE To change the security code into a new one.

      INVOKE(OBJ, 'newcode') to change the current security code to a new one.

      Note: You must first unsecure the Fumction Generator using the old security code.

Group fskmod
  Size: 1
  Mappings ChannelMap Command="FSKmod1" Index="1"

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: FSKey:STATe
    QueryCommand: FSKey:STATe?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Disable or enable the FSK mode. 

      To ensure proper operation, you should enable AM after you have set up the other modulation parameters. Only one modulation mode can be enabled at a time. When you enable AM the previous modulation is turned off.

  Property Frequency
    Type: InstrumentCommand
    ConfigureCommand: FSKey:FREQuency
    QueryCommand: FSKey:FREQuency?
    PermissibleType: Double bounded [Max="1.5E7" Min="0.01"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Set the FSK "hop" frequency from 10 mHz to 15 MHz.

      The default value is 100 Hz.

  Property InternalRate
    Type: InstrumentCommand
    ConfigureCommand: FSKey:INTernal:RATE
    QueryCommand: FSKey:INTernal:RATE?
    PermissibleType: Double bounded [Max="50000.0" Min="0.01"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 10
    ReadOnly: never
    Description: Set the rate at which the internal frequency "shifts" between the carrier and hop frequency. 

      Select from 10 mHz to 50 kHz, The default is 10 Hz.

      The FSK rate is ignored when the external source is selected.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: FSK:SOURCe
    QueryCommand: FSK:SOURCe?
    PermissibleType: String enum [internal=INT, external=EXT]
    DefaultValue: internal
    ReadOnly: never
    Description: Select an internal or external FSK.

      The default is INT.

      When the internal source is selected, the rate at which output frequency "shifts" between carrier frequency and hop frequency is determined by the FSK rate specified.

      When external source is selected, the output frequency is determined by the signal level on the rear-panel FSK terminal. When a low "TTL" is level is present, the carrier frequency is output.

      The maximum external FSK rate is 1 MHz.

      The external annunciator turns on when the function generator is waiting for external trigger signal.

Group ledcontrol
  Size: 1
  Mappings ChannelMap Command="RP1" Index="1"

  Property LED1
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED1'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED1,'propertyValue'']);
    PermissibleType: String none
    ReadOnly: never

  Property LED2
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED2'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED2,'propertyValue'']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property LED3
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED3'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED3,'propertyValue'']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property LED4
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED4'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED4,'propertyValue'']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property LED5
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED5'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED5,'propertyValue'']);
      propertyName = 1;
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property LED6
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED6'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED6,'propertyValue'']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property LED7
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      propertyValue=str2num(query(interface,'DIG:PIN? LED7'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%get parent
      parent = get(obj,'parent');
      %Get interface
      interface = get(parent,'interface');
      % Error checking.
      if ~ischar(propertyValue)
          error('property must be a string!');
      end
      fprintf(interface, ['DIG:PIN LED7,'propertyValue'']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Method LED1
    MCode:
      function LED1(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED1,' state '']);

  Method LED2
    MCode:
      function LED2(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED2,' state '']);

  Method LED3
    MCode:
      function LED3(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED3,' state '']);

  Method LED4
    MCode:
      function LED4(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED4,' state '']);

  Method LED5
    MCode:
      function LED5(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED5,' state '']);

  Method LED6
    MCode:
      function LED6(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED6,' state '']);

  Method LED7
    MCode:
      function LED7(obj, state)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(state)
          state = int2str(state);
      end
      if strcmp(state,'ON')
          state = '1';
      elseif strcmp(state, 'OFF')
          state = '0';
      end

      fprintf(interface, ['DIG:PIN LED7,' state '']);

Group system
  Size: 1
  Mappings ChannelMap Command="System1" Index="1"

  Property ByteOrder
    Type: InstrumentCommand
    ConfigureCommand: Format:BOrder
    QueryCommand: Format:BOrder?
    PermissibleType: String enum [normal=NORM, swapped=SWAP]
    DefaultValue: normal
    ReadOnly: never
    Description: Select the byte order for binary transfers in the block mode using the DATA:DAC command.

  Property Version
    Type: InstrumentCommand
    QueryCommand: System:VERsion?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Query the function generator to determine the present SCPI version.

  Method ResetGenerator
    MCode:
      function ResetGenerator(obj)
      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%get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      fprintf(interface, ['GEN:RST ']);

Group trigger
  Size: 1
  Mappings ChannelMap Command="Trigger1" Index="1"

Group triggerch1
  Size: 1
  Mappings ChannelMap Command="TriggerCH11" Index="1"

  Property source
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    SetMCode:
      function set(obj, propertyName, propertyValue)
      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parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(dutycycle)
          error('state must be a string.');
      end

      fprintf(interface, ['OUTPUT1:DCYC' propertyValue '']);

      propertyName = 1;
    PermissibleType: String none
    ReadOnly: never

  Method ImmediateTgigger
    MCode:
      function ImmediateTgigger(obj)
      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parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      fprintf(interface, ['OUTPUT1:TRIG:IMM']);

  Method Source
    MCode:
      function Source(obj,source)

      parent = get(obj,'parent');

      interface= get(parent,'interface');

      if ~ischar(source)
          error('input must be a string');
      end

      fprintf(interface, ['SOUR1:TRIG:SOUR ' source '']);

Group triggerch2
  Size: 1
  Mappings ChannelMap Command="TriggerCH21" Index="1"

  Method ImmediateTrigger
    MCode:
      function ImmediateTgigger(obj)
      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parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      fprintf(interface, ['OUTPUT2:TRIG:IMM']);

  Method Source
    MCode:
      function Source(obj,source)

      parent = get(obj,'parent');

      interface= get(parent,'interface');

      if ~ischar(source)
          error('input must be a string');
      end

      fprintf(interface, ['SOUR2:TRIG:SOUR ' source '']);
